PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PosnerCueing_SoloProject
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent left_box
      fillColor = none
      lineWidth = 3
      pos = (-0.35,0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent right_box
      fillColor = none
      lineWidth = 3
      pos = (0.35, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent cue_arrow
      letterHeight = 0.1
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $cueDur_ms/1000.0 
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      text [set every repeat]:
        $'←' if (validity=='valid' and targetSide=='left') or (validity=='invalid' and targetSide=='right') else '→'
    PolygonComponent target
      fillColor = white
      pos [set every repeat] = $(-0.35, 0) if targetSide=='left' else (0.35, 0) 
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] =  1.0
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    KeyboardComponent response_key
      allowedKeys [set every repeat] = 'z','m'
      correctAns = $'z' if targetSide=='left' else 'm' 
      forceEndRoutine = True
      startVal [time (s)] = $0.5 + (cueDur_ms/1000.0) + (SOA_ms/1000.0) 
      storeCorrect = True
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  Routine Instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Attention Task!
        Keep your eyes on the center cross at all times.
        A circle will appear on either the LEFT or the RIGHT side of the screen.
        Press the Z key if the circle appears on the LEFT.
        Press the M key if the circle appears on the RIGHT.
        Respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/nupurshah/Desktop/Psychopy/Solo Project/PosnerCueingConditions_SoloProject.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trialNum': 1, 'validity': 'invalid', 'targetSide': 'left', 'cueDur_ms': 150, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 2, 'validity': 'valid', 'targetSide': 'right', 'cueDur_ms': 150, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 3, 'validity': 'valid', 'targetSide': 'right', 'cueDur_ms': 150, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 4, 'validity': 'invalid', 'targetSide': 'right', 'cueDur_ms': 150, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 5, 'validity': 'valid', 'targetSide': 'left', 'cueDur_ms': 100, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 6, 'validity': 'valid', 'targetSide': 'right', 'cueDur_ms': 150, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 7, 'validity': 'valid', 'targetSide': 'left', 'cueDur_ms': 150, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 8, 'validity': 'valid', 'targetSide': 'right', 'cueDur_ms': 100, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 9, 'validity': 'valid', 'targetSide': 'left', 'cueDur_ms': 50, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 10, 'validity': 'valid', 'targetSide': 'right', 'cueDur_ms': 50, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 11, 'validity': 'valid', 'targetSide': 'left', 'cueDur_ms': 150, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 12, 'validity': 'invalid', 'targetSide': 'right', 'cueDur_ms': 50, 'SOA_ms': 150, 'targetDur_ms': 1000},
      {'trialNum': 13, 'validity': 'invalid', 'targetSide': 'left', 'cueDur_ms': 50, 'SOA_ms': 150, 'targetDur_ms': 1000}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
    Routine trial
  LoopTerminator trials
